PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'participant_elo': '1600'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = chess_experiment
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.2
      text = Hello world!
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  Routine routine_2_back
  Routine chess_puzzle
    MouseComponent mouse
      clickable = white_pieces
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0
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    ImageComponent chess_board
      image = images/board_3.png
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0
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    CodeComponent move_piece
      Code Type = Py
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      Before Experiment:
        import time
        import chess
        import math
        import Generate_inputs as inputgen

        # Globals
        first_mover = "" # Who is playing first
        move_speed = 1 # Computer piece movespeed constant
        board_state = [] # Custom board representation

        x_axis = ["a", "b", "c", "d", "e", "f", "g", "h"]

        feedback_text = ''
        correct_color = "springgreen"
        incorrect_color = "red"

        puzzle_time = 0

        # Data for piece codes and x axis labels
        piece_codes = ["p", "n", "b", "r", "q", "k", "P", "N", "B", "R", "Q", "K"]

        # Time it takes for a piece to move from A to B
        # Could instead make it a speed parameter
        move_time = 1

        def coord_to_pos(coord):
            '''Convert coordinate system to
            position (in units of screen height)'''

            if type(coord) == int:
                pos = (coord/8) - 9/16
            else:
                pos = [0, 0]
                for i in range(len(coord)):
                    pos[i] = (coord[i]/8) - 9/16

            global first_mover
            if first_mover == "w":
                if type(pos) == list:
                    pos = [i * (-1) for i in pos]
                elif type(pos) == float:
                    pos = pos * (-1)

            return pos

        def pos_to_coord(pos):
            '''Convert position (in units of screen height)
            to coordinate system'''
            if type(pos) == int:
                coord = int(round((pos + 9/16) * 8))
            else:
                coord = [1, 1]
                for i in range(len(pos)):
                    coord[i] = int(round((pos[i] + 9/16) * 8))

            global first_mover
            if first_mover == "w":
                if type(coord) == list:
                    coord = [9 - i for i in coord]
                elif type(coord) == int:
                    coord = 9 - coord

            return coord

        def code_to_coord(code):
            '''Convert FEN code to coordinate system'''
            global x_axis
            x_pos = x_axis.index(code[0]) + 1
            y_pos = int(code[1])
            return [x_pos, y_pos]

        def coord_to_code(coord):
            '''Convert coord to UCI move code'''
            global x_axis
            index = coord[0] - 1
            x_code = x_axis[index]
            y_code = coord[1]
            return f"{x_code}{y_code}"


        def lerp_position(start_pos, end_pos, fraction):
            '''Linear interpolation between two points'''
            move_vector = np.subtract(end_pos, start_pos)
            current_pos = start_pos + (fraction * move_vector)
            return current_pos

        # function definition to compute magnitude o f the vector
        def magnitude(vector):
            mag = math.sqrt(sum(pow(element, 2) for element in vector))
            return mag

        def move_piece(time_elapsed, piece, start_coord, end_coord):
            '''Move piece by a certain amount this frame'''
            start_pos = coord_to_pos(start_coord)
            end_pos = coord_to_pos(end_coord)

            vector = [end_pos[0] - start_pos[0], end_pos[1] - start_pos[1]]
            distance = magnitude(vector)

            global move_speed
            time_to_travel = distance / move_speed

            move_finished = False
            if (time_elapsed < time_to_travel):
                piece.pos = lerp_position(start_pos, end_pos, time_elapsed / time_to_travel)
            else:
                piece.pos = end_pos
                move_finished = True
            return piece, move_finished

        def create_piece(code, x, y, i):
            '''Initialize and display a chess piece'''
            if code.islower():
                image_path = "images/" + code + ".png"
            else:
                image_path = "images/" + code + "_w.png"
            x_pos = coord_to_pos(x)
            y_pos = coord_to_pos(y)
            piece = visual.ImageStim(win=win, name=(code + str(x) + str(y)), image=image_path,
            anchor="center", pos=(x_pos, y_pos), size=(1/8, 1/8), depth = (-10 - i),
            texRes=128.0, interpolate=True)
            return piece

        def create_pieces(fen, board_state):
            '''Create all pieces in the FEN'''
            x = 1
            y = 8
            for i in range(len(fen[0])):
                element = fen[0][i]
                if (element == "/"):
                    x = 1
                    y -= 1
                if (element.isdigit()):
                    x += int(element)
                if (element in piece_codes):
                    piece = create_piece(element, x, y, i)
                    piece.setAutoDraw(True)
                    if element.isupper():
                        white_pieces.append(piece)
                    else:
                        black_pieces.append(piece)
                    board_state[y][x] = piece.name
                    x += 1
            return white_pieces, black_pieces, board_state

        def draw_square(code):
            coord = code_to_coord(code)
            x_pos = coord_to_pos(coord[0])
            y_pos = coord_to_pos(coord[1])

            polygon = visual.Rect(
                win=win, name=(code + '_square'),
                width=(1/8), height=(1/8),
                ori=0.0, pos=(x_pos, y_pos), anchor='center',
                lineWidth=0,     colorSpace='rgb',  lineColor=[0, 0, 0], fillColor=[249/256, 194/256, 46/256],
                depth=-5, interpolate=True)
            polygon.setAutoDraw(True)
            return polygon

        def search_pieces(piece_array, piece_name):
            '''Search for a piece in array by piece.name'''
            for piece in piece_array:
                if piece_name == piece.name:
                    return piece
            print("Warning: Did not find piece by name " + piece_name + " in array.")
            return None

        def evaluate_move(board_state, enemy_pieces, player_pieces, target_square):
            '''See if player move is taking an enemy piece'''
        #    print(target_square)
            target_square_content = board_state[target_square[1]][target_square[0]]
            if target_square_content:
                piece_to_take = search_pieces(enemy_pieces, target_square_content)
                if piece_to_take is None:
                    piece_to_take = search_pieces(player_pieces, target_square_content)
                return piece_to_take

        def begin_move(piece, start_coord, end_coord):
            '''Initiate the computer movemement of a piece'''
            if piece is None:
                return None
            else:
                return piece, start_coord, end_coord

        def update_board_state(board_state, old_coord, new_coord, value):
            '''Update the board state matrix
            when a piece changes squares'''
            board_state[new_coord[1]][new_coord[0]] = value

            if board_state[old_coord[1]][old_coord[0]] == value: # Only delete old entry if it has not already been replaced
                board_state[old_coord[1]][old_coord[0]] = ''

        #    for row in board_state:
        #        print(row)

            return board_state


        def clear_pieces(pieces):
            for piece in pieces:
                piece.setAutoDraw(False)
        #        piece._unload()

        # Could combine this function with evaluate_move():
        def check_valid_move(board_state, player_pieces, coord, possible_moves):
            '''See if player move is valid'''
            target_square_content = board_state[coord[1]][coord[0]]
            if coord[0] < 1 or coord[0] > 8 or coord[1] < 1 or coord[1] > 8:
                return False
            elif search_pieces(player_pieces, target_square_content):
                return False
            elif coord not in possible_moves:
                return False
            else:
                return True

        def check_correct_move(move_num, moves, start_coord, end_coord):
            correct_start = code_to_coord(moves[move_num][0:2])
            correct_end = code_to_coord(moves[move_num][2:4])
            if (start_coord == correct_start) and (end_coord == correct_end):
                return True
            else:
                return False

        #def find_empty_take_square(board_state):
        #    num_cols = 3
        #
        #    target = [9,8]
        #    while board_state[target[1]][target[0]]:
        #        if target[0] == 8 + num_cols:
        #            target[0] = 9
        #            target[1] = target[1] - 1
        #        else:
        #            target[0] = target[0] + 1
        #    return target


        def start_enemy_move(moves, move_num, board_state, enemy_pieces):
            # Generate yellow rectangles over first black move
            move_start = moves[move_num][0:2]
            move_end = moves[move_num][2:4]
            highlight_squares = []
            for move in [move_start, move_end]:
                highlight_squares.append(draw_square(move))

            # Begin first move
            # This code needs to be generalized in a function
            start_coord = code_to_coord(move_start)
            end_coord = code_to_coord(move_end)
            piece_name = board_state[start_coord[1]][start_coord[0]]

            moving_piece = search_pieces(enemy_pieces, piece_name)

            return moving_piece, start_coord, end_coord, highlight_squares

        def scan_legal_moves(board_lib, piece):
            piece_coord = pos_to_coord(piece.pos)
            start = coord_to_code(piece_coord)

            legal_moves = board_lib.legal_moves
            x_axis = ["a", "b", "c", "d", "e", "f", "g", "h"]

            possible_moves = []

            for x in range(1,9):
                for y in range(1,9):

                    uci_code = f"{start}{x_axis[x-1]}{y}"
                    if uci_code[0:2] == uci_code[2:4]:
                        continue
                    move = chess.Move.from_uci(uci_code)
                    if move in legal_moves:
                       possible_moves.append([x, y])

            return possible_moves

        def create_highlight(image_path, coord):
            return visual.ImageStim(win=win, name=f"highlight", image=image_path,
                anchor="center", pos=coord_to_pos(coord), size=(1/8, 1/8), depth = -5,
                texRes=128.0, interpolate=True)

        def draw_possible_moves(possible_moves, player_move_start):
            global board_state
            take_img = "images/take_piece.png"
            empty_img = "images/empty_square.png"
            home_img = "images/home_square.png"

            valid_move_highlights = []

            # Add home square marker
            home_square = create_highlight(home_img, player_move_start)
            home_square.setAutoDraw(True)
            valid_move_highlights.append(home_square)

            # Add take and empty markers
            for move in possible_moves:
                highlight = None

                if board_state[move[1]][move[0]]:
                    highlight = create_highlight(take_img, move)
                else:
                    highlight = create_highlight(empty_img, move)

                highlight.setAutoDraw(True)
                valid_move_highlights.append(highlight)


            return valid_move_highlights

        def check_uci_move(board_lib, start_coord, end_coord):
            '''Update python chess board representation'''
            uci_code = coord_to_code(start_coord) + coord_to_code(end_coord)

            move = chess.Move.from_uci(uci_code)

            castling_king = board_lib.is_kingside_castling(move)
            castling_queen = board_lib.is_queenside_castling(move)

            en_passant = board_lib.is_en_passant(move)

        #    if move in board_lib.legal_moves:
        #        board_lib.push(move)  # Make the move
        #    else:
        #        print("Illegal move. May be a castling rook move.")
        #        print(f"Start coord: {start_coord}; End coord: {end_coord}")

        #    board_lib.push(move)  # Make the move

            return move, castling_king, castling_queen, en_passant

        def make_en_passant_move(piece, white_pieces, black_pieces, board_state, end_coord):
        #    print("EN PASSANT MOVE")
            target_square_content = []
            piece_taken = []
            if piece in white_pieces:
                target_square_content = board_state[end_coord[1] - 1][end_coord[0]]
                piece_taken = search_pieces(black_pieces, target_square_content)
            elif piece in black_pieces:
                target_square_content = board_state[end_coord[1] + 1][end_coord[0]]
                piece_taken = search_pieces(white_pieces, target_square_content)
        #    print(f"PIECE TAKEN: {piece_taken.name}")
            return piece_taken

        def try_pawn_promotion(piece, end_coord):
            if end_coord[1] in [1, 8]:
                if "P" in piece.name:
                    print("PAWN PROMOTION")
                    piece.image = "images/q_w.png"
                elif "p" in piece.name:
                    print("PAWN PROMOTION")
                    piece.image = "images/q.png"
            return None

        def start_rook_castle(pieces, start_coord, end_coord):
            '''Move rook to target square during castling move'''

            target_square_content = board_state[start_coord[1]][start_coord[0]]

        #    for piece in pieces:
        #        print(f"Piece name: {piece.name}")
        #    print(f"Target square content: {target_square_content}")

            target_rook = search_pieces(pieces, target_square_content)
            moving_piece, start_coord, end_coord = begin_move(target_rook, start_coord, end_coord)

            return moving_piece, start_coord, end_coord

        def try_castling_move(castling_king, castling_queen, pieces, player_color):
            moving_piece = None
            start_coord = []
            end_coord = []

            if castling_king:
                print("CASTLING KINSIDE")
                if player_color == "b":
                    # move rook g1e1
                    moving_piece, start_coord, end_coord = start_rook_castle(pieces, [8,1], [6,1])
                elif player_color == "w":
                    # move rook a8c8
                    moving_piece, start_coord, end_coord = start_rook_castle(pieces, [8,8], [6,8])
            elif castling_queen:
                print("CASTLING QUEENSIDE")
                if player_color == "b":
                    # move rook a1d1
                    moving_piece, start_coord, end_coord = start_rook_castle(pieces, [1,1], [4,1])
                elif player_color == "w":
                    # move rook g8e8
                    moving_piece, start_coord, end_coord = start_rook_castle(pieces, [1,8], [4,8])

            return moving_piece, start_coord, end_coord
      Begin Experiment:
        participant = int(expInfo['participant'])
        participant_elo = int(expInfo['participant_elo'])

        inputgen.create_subset(participant_elo, participant)
      Begin Routine:
        # Begin Routine

        # Initialize output vars
        out_correct_answer = 0
        out_timed_out = 0
        out_time_elapsed = 0
        out_moves_played = ""
        out_difficulty = difficulty

        # Initialize board state and piece arrays
        board_state = [['' for i in range(12)] for i in range(9)]
        white_pieces = []
        black_pieces = []

        # Chess board from chess library

        board_lib = chess.Board()
        board_lib.set_fen(FEN)

        # Set FEN from conditions file
        fen_str = FEN
        fen = fen_str.split(" ")

        # Set first mover
        first_mover = fen[1]

        # Set Moves from conditions file
        moves_str = Moves
        moves = moves_str.split()

        # Populate the board based on the FEN
        white_pieces, black_pieces, board_state = create_pieces(fen, board_state)
        clicked_piece = None

        player_pieces = []
        enemy_pieces = []

        # Identify player and enemy
        if first_mover == "b":
            player_pieces = white_pieces
            enemy_pieces = black_pieces
        elif first_mover == "w":
            player_pieces = black_pieces
            enemy_pieces = white_pieces
        else:
            raise Exception("ERROR: FEN does not have team label.")


        # Set up first computer move
        enemy_move = True
        move_num = 0

        moving_piece, start_coord, end_coord, highlight_squares = start_enemy_move(moves, move_num, board_state, enemy_pieces)

        # Initialize computer movement clock
        move_clock = core.Clock()
        move_clock.reset(newT=0.0)

        # Start mouse clock
        # This is for a click cooldown to prevent accidental double-clicking
        mouse_clock = core.Clock()
        mouse_clock.addTime(100)

        # Track correct/incorrect moves
        player_move_start = []
        possible_moves = []
        valid_move_highlights = []
        correct_move = True

        #global global_clock

        puzzle_clock = core.Clock()
        puzzle_time = puzzle_clock.getTime()

        timeout_clock = core.Clock()
        timout_time = 0
        timeout = False

        feedback_text = ''
        chess_feedback.text = feedback_text

        is_castling_move = False
      Each Frame:
        # Each Frame

        puzzle_time = puzzle_clock.getTime()
        global_time = global_clock.getTime()

        if timeout:
            timeout_time = timeout_clock.getTime()
            if timeout_time >= 2:
                continueRoutine = False
        elif puzzle_time >= 30: # Puzzle timeout
            # Set output vars
            out_timed_out = 1
            out_time_elapsed = puzzle_time

            feedback_text = "Out of time"
            chess_feedback.text = feedback_text
            chess_feedback.color = incorrect_color

            timeout_clock.reset()
            timeout = True
        elif global_time >= 180: # Block timeout
            # Set output vars
            out_timed_out = 1
            out_time_elapsed = puzzle_time

            feedback_text = "Out of time:\nBlock over"
            chess_feedback.text = feedback_text
            chess_feedback.color = "black"

            timeout_clock.reset()
            timeout = True

            chess_trials.finished = True

        # Update clock displays
        puzzle_timer.text = time.strftime('Puzzle time:\n%M:%S', time.gmtime(30 - min(puzzle_time, 30)))
        global_timer.text = time.strftime('Block time:\n%M:%S', time.gmtime(180 - min(global_time, 180)))

        # Code executed if a piece is crrently being
        # moved by the computer
        if moving_piece is not None:
            time_elapsed = move_clock.getTime()
            moving_piece, move_finished = move_piece(time_elapsed, moving_piece, start_coord, end_coord)
            if move_finished:

                piece_taken = evaluate_move(board_state, enemy_pieces, player_pieces, end_coord)

                move, castling_king, castling_queen, en_passant = check_uci_move(board_lib, start_coord, end_coord)
                if not is_castling_move:
                    board_lib.push(move)

                # En passant
                if en_passant:
                    piece_taken = make_en_passant_move(moving_piece, white_pieces, black_pieces, board_state, end_coord)

                # Castling
                if castling_king or castling_queen:
                    pieces = []
                    if enemy_move:
                        pieces = enemy_pieces
                    else:
                        pieces = player_pieces
                    moving_piece, start_coord, end_coord = try_castling_move(castling_king, castling_queen, pieces, player_color)
                    is_castling_move = True
                else:
                    is_castling_move = False

                # Pawn promotion
                try_pawn_promotion(moving_piece, end_coord)

                # Update custom board state representation
                board_state = update_board_state(board_state, start_coord, end_coord, moving_piece.name)

                if piece_taken:
                    clear_pieces([piece_taken])

                moving_piece = None

                move_num = move_num + 1
                enemy_move = False

                # Reset clock
                move_clock.reset()

        # Check mouse click cooldown
        cooldown = mouse_clock.getTime() < 0.1

        if not timeout:
            # Check for piece selection
            if clicked_piece is None and moving_piece is None:
                for piece in player_pieces:                # for each pic
                    if not cooldown and mouse.isPressedIn(piece, buttons=[0]):    # If the picture is currently click
                        clicked_piece = piece
                        player_move_start = pos_to_coord(clicked_piece.pos)
                        mouse_clock.reset()

                        # Look for legal moves
                        possible_moves = scan_legal_moves(board_lib, clicked_piece)
                        valid_move_highlights = draw_possible_moves(possible_moves, player_move_start)

            # Check for piece placement
            elif clicked_piece is not None:
                clicked_piece.pos = mouse.getPos()

                if not cooldown and mouse.isPressedIn(clicked_piece, buttons=[0]):
                    snapped_coord = pos_to_coord(mouse.getPos())

                    # See if move is a redeposit
                    redeposit = False
                    if snapped_coord == player_move_start:
                        redeposit = True

                    valid_move = check_valid_move(board_state, player_pieces, snapped_coord, possible_moves)

                    if redeposit:
                        clicked_piece.pos = coord_to_pos(snapped_coord)
                        clicked_piece = None
                        clear_pieces(valid_move_highlights)

                    elif valid_move:

                        clicked_piece.pos = coord_to_pos(snapped_coord)

                        # Get move code and add to out_moves_played
                        player_move_code = f"{coord_to_code(player_move_start)}{coord_to_code(snapped_coord)}"
                        out_moves_played = f"{out_moves_played} {player_move_code}"

                        # Evaluate move
                        piece_taken = evaluate_move(board_state, enemy_pieces, player_pieces, snapped_coord)

                        clear_pieces(valid_move_highlights)

                        # Reset clock
                        move_clock.reset()

                        if snapped_coord[0] < 9: # Not moving piece off board

                            move, castling_king, castling_queen, en_passant = check_uci_move(board_lib, player_move_start, snapped_coord)
                            if not is_castling_move:
                                board_lib.push(move)

                            # En passant
                            if en_passant:
                                piece_taken = make_en_passant_move(clicked_piece, white_pieces, black_pieces, board_state, snapped_coord)

                            # Castling
                            if castling_king or castling_queen:
                                moving_piece, start_coord, end_coord = try_castling_move(castling_king, castling_queen, player_pieces, player_color)
                                is_castling_move = True
                            else:
                                is_castling_move = False

                            # Pawn promotion
                            try_pawn_promotion(clicked_piece, snapped_coord)

                        board_state = update_board_state(board_state, player_move_start, snapped_coord, clicked_piece.name)

                        # If taking a piece, start movement of piece off board
                        if piece_taken:
                            clear_pieces([piece_taken])

                        clicked_piece = None

                        # Check for correct move or end of puzzle
                        correct_move = check_correct_move(move_num, moves, player_move_start, snapped_coord)

                       # Check if wrong move or last move
                        if (correct_move == False) or (move_num == len(moves) - 1):
                            feedback_text = "Correct" if correct_move else "Incorrect"
                            chess_feedback.text = feedback_text
                            if correct_move:
                                chess_feedback.color = correct_color

                                # Set output var
                                out_correct_answer = 1
                                out_time_elapsed = puzzle_time

                            else:
                                chess_feedback.color = incorrect_color

                                # Set output var
                                out_time_elapsed = puzzle_time

                            timeout_clock.reset()
                            timeout = True

                        # go to enemy move
                        else:
                            clear_pieces(highlight_squares)
                            move_num = move_num + 1
                            enemy_move = True

                    mouse_clock.reset()

            if enemy_move and (moving_piece is None):
                moving_piece, start_coord, end_coord, highlight_squares = start_enemy_move(moves, move_num, board_state, enemy_pieces)
      End Routine:
        # Set trial data
        thisChess_trial["correct_answer"] = out_correct_answer
        thisChess_trial["timed_out"] = out_timed_out
        thisChess_trial["time_elapsed"] = out_time_elapsed
        thisChess_trial["moves_played"] = out_moves_played
        thisChess_trial["difficulty"] = out_difficulty

        # Clear elements
        clear_pieces(white_pieces)
        clear_pieces(black_pieces)
        clear_pieces(highlight_squares)
        clear_pieces(valid_move_highlights)

        win.flip()
    TextComponent chess_feedback
      letterHeight = 0.05
      pos = (-5/8, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $feedback_text
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    TextComponent puzzle_timer
      letterHeight = 0.04
      pos = (-5/8, 2/8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $puzzle_time
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    TextComponent global_timer
      letterHeight = 0.04
      pos = (-5/8, 3/8)
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine two_back
    TextComponent fixation
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent letter
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $thisLetter
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      storeCorrect = True
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  Routine instructions_two_back
    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the 2-back experiment.

        Look at the letter appearing on the screen. Your task is to remember the letter appearing two steps before the current letter. If the current letter is the same as the letter two steps before, e.g. an 'X' followed by a 'Y' followed by another 'X', press the spacebar.

        Press 'space' to begin.
    KeyboardComponent press_to_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_chess_puzzle
    TextComponent chess_instructions
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $f"Instructions slide\n\nComplete the chess puzzles.\nDifficulty is: {diff}"
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    KeyboardComponent start_block
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent global_timer_start
      Code Type = Py
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      Before Experiment:
        ## Initialize global clock var
        global_clock = core.Clock()
        global_time = 0
      End Routine:
        ## Start clock for the block
        global_clock.reset()
    CodeComponent diff_text
      Code Type = Py
      Before Experiment:
        diff = "blah"
      Begin Routine:
        diff = difficulty

        chess_instructions.text = f"Instructions slide\n\nComplete the chess puzzles.\nDifficulty is: {diff}"
  Routine feedback
    TextComponent feedback_text_slide
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $feedback_text
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  Routine intro
    TextComponent intro_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Welcome to the experiment.
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    KeyboardComponent start_experiment
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine intro
  LoopInitiator chess_levels loopType="TrialHandler"
    conditionsFile = conditions_chess_levels.tsv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('session', 1), ('difficulty', 500)]),
      OrderedDict([('session', 2), ('difficulty', 1600)]),
      OrderedDict([('session', 3), ('difficulty', 2500)])]
    Routine instructions_chess_puzzle
    LoopInitiator chess_trials loopType="TrialHandler"
      conditionsFile = $puzzle_set
      loopType = random
      nReps = 1
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      Routine chess_puzzle
    LoopTerminator chess_trials
  LoopTerminator chess_levels
  Routine instructions_two_back
  LoopInitiator trials_two_back loopType="TrialHandler"
    conditionsFile = conditions_twoback.tsv
    loopType = sequential
    nReps = 5
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    conditions:
      [OrderedDict([('thisLetter', 'L'), ('target', 0), ('corrAns', None)]),
      OrderedDict([('thisLetter', 'J'), ('target', 0), ('corrAns', None)]),
      OrderedDict([('thisLetter', 'A'), ('target', 0), ('corrAns', None)]),
      OrderedDict([('thisLetter', 'K'), ('target', 0), ('corrAns', None)]),
      OrderedDict([('thisLetter', 'A'), ('target', 1), ('corrAns', 'space')])]
    Routine two_back
  LoopTerminator trials_two_back
